PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Tutorial5.0
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent sw
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "familiar", "unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0 
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Click to submit
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    MouseComponent mouse
      clickable = text_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      syncScreenRefresh = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = studyword.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Study_word': 'vase'},
      {'Study_word': 'tiger'},
      {'Study_word': 'book'},
      {'Study_word': 'cushion'},
      {'Study_word': 'piano '}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = testwords.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_a_e'},
      {'test': 't_g_r'},
      {'test': '_oo_'},
      {'test': 'c_sh_o_'},
      {'test': '_ia_n'},
      {'test': '_ea_O_'},
      {'test': 'c_m_r_'},
      {'test': '_p_a_d_'},
      {'test': '_o_s_'},
      {'test': 'o_a_g_'}]
    Routine test
  LoopTerminator trials_2
